OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.5.0)

Keyboard stimulator
  Filename = ${Player_ScenarioDirectory}/config/buttons.txt
-> Stimulation Filter
  Default action = Reject
  Time range begin = 0
  Time range end = 0
  Action to perform = Select
  Stimulation range begin = OVTK_StimulationId_Number_1B
  Stimulation range end = OVTK_StimulationId_Number_1B
-> Lua Stimulator
  Lua Script = ${Player_ScenarioDirectory}/scripts/main.lua
-> Display cue image
  Display images in full screen = false
  Scale images to fit = false
  Clear screen Stimulation = OVTK_StimulationId_VisualStimulationStop
  Cue Image 1 = ${Path_Data}/plugins/simple-visualization/p300-magic-card/01.png
  Stimulation 1 = OVTK_StimulationId_Label_01
  Cue Image 2 = ${Path_Data}/plugins/simple-visualization/p300-magic-card/02.png
  Stimulation 2 = OVTK_StimulationId_Label_02
  Cue Image 3 = ${Path_Data}/plugins/simple-visualization/p300-magic-card/03.png
  Stimulation 3 = OVTK_StimulationId_Label_03
  Cue Image 4 = ${Path_Data}/plugins/simple-visualization/p300-magic-card/04.png
  Stimulation 4 = OVTK_StimulationId_Label_04
  Cue Image 5 = ${Path_Data}/plugins/simple-visualization/p300-magic-card/05.png
  Stimulation 5 = OVTK_StimulationId_Label_05
  Cue Image 6 = ${Path_Data}/plugins/simple-visualization/p300-magic-card/06.png
  Stimulation 6 = OVTK_StimulationId_Label_06
  Cue Image 7 = ${Path_Data}/plugins/simple-visualization/p300-magic-card/07.png
  Stimulation 7 = OVTK_StimulationId_Label_09
  Cue Image 8 = ${Path_Data}/plugins/simple-visualization/p300-magic-card/08.png
  Stimulation 8 = OVTK_StimulationId_Label_08
  Cue Image 9 = ${Path_Data}/plugins/simple-visualization/p300-magic-card/09.png
  Stimulation 9 = OVTK_StimulationId_Label_09
  Cue Image 10 = ${Path_Data}/plugins/simple-visualization/p300-magic-card/10.png
  Stimulation 10 = OVTK_StimulationId_Label_11
  Cue Image 11 = ${Path_Data}/plugins/simple-visualization/p300-magic-card/11.png
  Stimulation 11 = OVTK_StimulationId_Label_11
  Cue Image 12 = ${Path_Data}/plugins/simple-visualization/p300-magic-card/12.png
  Stimulation 12 = OVTK_StimulationId_Label_12
  Cue Image 13 = ${Path_Data}/plugins/simple-visualization/p300-magic-card/13.png
  Stimulation 13 = OVTK_StimulationId_Label_13
  Cue Image 14 = ${Path_Data}/plugins/simple-visualization/p300-magic-card/14.png
  Stimulation 14 = OVTK_StimulationId_Label_14
  Cue Image 15 = ${Path_Data}/plugins/simple-visualization/p300-magic-card/15.png
  Stimulation 15 = OVTK_StimulationId_Label_15
  Cue Image 16 = ${Path_Data}/plugins/simple-visualization/p300-magic-card/16.png
  Stimulation 16 = OVTK_StimulationId_Label_16
  Cue Image 17 = ${Path_Data}/plugins/simple-visualization/p300-magic-card/17.png
  Stimulation 17 = OVTK_GDF_Cross_On_Screen
  Cue Image 18 = ${Path_Data}/plugins/simple-visualization/p300-magic-card/18.png
  Stimulation 18 = OVTK_StimulationId_Label_18
  Cue Image 19 = ${Path_Data}/plugins/simple-visualization/p300-magic-card/19.png
  Stimulation 19 = OVTK_StimulationId_Label_19
  Cue Image 20 = ${Path_Data}/plugins/simple-visualization/p300-magic-card/20.png
  Stimulation 20 = OVTK_StimulationId_Label_20
  Cue Image 21 = ${Path_Data}/plugins/simple-visualization/p300-magic-card/21.png
  Stimulation 21 = OVTK_StimulationId_Label_21
  Cue Image 22 = ${Path_Data}/plugins/simple-visualization/p300-magic-card/22.png
  Stimulation 22 = OVTK_StimulationId_Label_22
  Cue Image 23 = ${Path_Data}/plugins/simple-visualization/p300-magic-card/23.png
  Stimulation 23 = OVTK_StimulationId_Label_23
  Cue Image 24 = ${Path_Data}/plugins/simple-visualization/p300-magic-card/24.png
  Stimulation 24 = OVTK_StimulationId_Label_24
  Cue Image 25 = ${Path_Data}/plugins/simple-visualization/p300-magic-card/25.png
  Stimulation 25 = OVTK_StimulationId_Label_25
  Cue Image 26 = ${Path_Data}/plugins/simple-visualization/p300-magic-card/26.png
  Stimulation 26 = OVTK_StimulationId_Label_26
  Cue Image 27 = ${Path_Data}/plugins/simple-visualization/p300-magic-card/27.png
  Stimulation 27 = OVTK_StimulationId_Label_27
  Cue Image 28 = ${Path_Data}/plugins/simple-visualization/p300-magic-card/28.png
  Stimulation 28 = OVTK_StimulationId_Label_28
  0x8d21ff41 = ${Player_ScenarioDirectory}/config/image_display_config.xml

0x341d3912 Stimulation Filter
  Default action = Reject
  Time range begin = 0
  Time range end = 0
  Action to perform = Select
  Stimulation range begin = OVTK_StimulationId_Label_00
  Stimulation range end = OVTK_StimulationId_Label_0F
-> 0x341d3912 Display cue image
  Display images in full screen = false
  Scale images to fit = false
  Clear screen Stimulation = OVTK_StimulationId_VisualStimulationStop
  Cue Image 1 = ${Path_Data}/plugins/simple-visualization/p300-magic-card/01.png
  Stimulation 1 = OVTK_StimulationId_Label_01
